OSMAPOSLParameters :=
; example file for OSEM (8 subsets)

objective function type:= PoissonLogLikelihoodWithLinearModelForMeanAndProjData
PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

input file := my_prompts.hs

; additive projection data to handle randoms etc
additive sinogram := my_additive_sinogram.hs 

; norm and acf
Bin Normalisation type := From ProjData
  Bin Normalisation From ProjData :=
   normalisation projdata filename:= my_multfactors.hs
  End Bin Normalisation From ProjData:=

; if the next parameters are enabled, 
; the sensitivity will be computed and saved
; use %d where you want the subset-number (a la printf)
; we do this here for illustration, but also for re-use later on (to save some time)
; CAREFUL: use correct number of subsets in name to avoid confusion
subset sensitivity filenames:= subset_sensitivity_8subsets_zoom2%d.hv
recompute sensitivity := 1
zoom := 2

end PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

output filename prefix := OSEM_zoom
number of subsets:= 8
number of subiterations:= 240
save estimates at subiteration intervals:= 24

END :=
