OSMAPOSLParameters :=
; example file for OSEM continued at late iterations

objective function type:= PoissonLogLikelihoodWithLinearModelForMeanAndProjData
PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

input file := my_prompts.hs

; additive projection data to handle randoms etc
additive sinogram := my_additive_sinogram.hs 

Bin Normalisation type := From ProjData
  Bin Normalisation From ProjData :=
   normalisation projdata filename:= my_multfactors.hs
  End Bin Normalisation From ProjData:=

; the sensitivity will be reused from the OSEM runs
; CAREFUL: use correct number of subsets (or just disable this)
subset sensitivity filenames:= subset_sensitivity_8subsets_%d.hv

; here comes the prior stuff

end PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

initial estimate:= OSEM_240.hv

output filename prefix := OSEM_240_continued
number of subsets:= 8
number of subiterations:= 8
save estimates at subiteration intervals:= 1

END :=
