OSMAPOSLParameters :=
; example file for OSEM (8 subsets)

objective function type:= PoissonLogLikelihoodWithLinearModelForMeanAndProjData
PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

input file := ${INPUT}

; additive projection data to handle randoms etc
additive sinogram := ${ADDSINO}

; norm and acf
Bin Normalisation type := From ProjData
  Bin Normalisation From ProjData :=
   normalisation projdata filename:= ${MULTFACTORS}
  End Bin Normalisation From ProjData:=

; if the next parameters are enabled, 
; the sensitivity will be computed and saved
; use %d where you want the subset-number (a la printf)
; we do this here for illustration, but also for re-use later on (to save some time)
; CAREFUL: use correct number of subsets in name to avoid confusion
subset sensitivity filenames:= subset_sensitivity_8subsets_%d.hv
recompute sensitivity := 1


end PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

output filename prefix := ${OUTPUT}
number of subsets:= 8
number of subiterations:= 96
save estimates at subiteration intervals:= 24

END :=
